<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RootPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\ArmBenchmarking\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it + DateTime.Now.ToString("MM_dd_yyyy_HH_mm_ss") + "\"</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>RootPath</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpHardwareInit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="PublishSubject" TypeArguments="harp:HarpMessage">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM6</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Address</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>44</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>StopPwm</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Frequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>93</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>200</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>StopCamera</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>StartCamera</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>BehaviorEvents</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="p1:BehaviorEvent">
                      <p1:Type>RegisterCamera</p1:Type>
                      <p1:Mask>Digital0</p1:Mask>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Seconds</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="p1:BehaviorEvent">
                      <p1:Type>Input</p1:Type>
                      <p1:Mask>Poke0InfraRedBeam</p1:Mask>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Item2</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="harp:Parse">
                      <harp:Type>TimestampedU8</harp:Type>
                      <harp:IsArray>false</harp:IsArray>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Seconds</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Subtract" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="p1:BehaviorCommand">
                      <p1:Type>StopPwm</p1:Type>
                      <p1:Mask>Digital0</p1:Mask>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>BehaviorCommands</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>200</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="p1:BehaviorCommand">
                      <p1:Type>PwmFrequency</p1:Type>
                      <p1:Mask>Digital0</p1:Mask>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>BehaviorCommands</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>10</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="p1:BehaviorCommand">
                      <p1:Type>PwmDutyCycle</p1:Type>
                      <p1:Mask>Digital0</p1:Mask>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>BehaviorCommands</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>StartExperiment</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="p1:BehaviorCommand">
                      <p1:Type>StartPwm</p1:Type>
                      <p1:Mask>Digital0</p1:Mask>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>BehaviorCommands</Name>
                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>RegisterCamera</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraStream</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>CameraSyncInfo</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>22067283</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>CameraStream</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ScreenSyn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>7680</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>DarkGray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Fixed</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>238</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-3.5555</Left>
              <Right>3.5555</Right>
              <Bottom>-0.5</Bottom>
              <Top>0.5</Top>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>F3</gli:Key>
          <gli:Modifiers xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LogCamera</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>CameraStream</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Image</Selector>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>RootPath</Name>
              </Expression>
              <Expression xsi:type="Add">
                <Operand xsi:type="StringProperty">
                  <Value>TopVideo.avi</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>C:\Data\ArmBenchmarking\05_04_2022_16_55_55\TopVideo.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>false</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>200</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>CameraSyncInfo</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1,Item2.ChunkData.FrameID,Item2.ChunkData.Timestamp</Selector>
              </Expression>
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>new(
it.Item1 as HarpTimestamp,
it.Item2 as FrameCounter,
it.Item3 as CameraClock
)</scr:Expression>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>RootPath</Name>
              </Expression>
              <Expression xsi:type="Add">
                <Operand xsi:type="StringProperty">
                  <Value>CameraCentroid.csv</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>C:\Data\ArmBenchmarking\05_04_2022_16_55_55\CameraCentroid.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>true</io:IncludeHeader>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="5" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="12" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source2" />
              <Edge From="12" To="13" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MeasureFrameRate</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>BehaviorEvents</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Address</Selector>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="IntProperty">
                        <Value>44</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="harp:Parse">
                <harp:Type>TimestampedS16</harp:Type>
                <harp:IsArray>false</harp:IsArray>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Seconds</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Value</Selector>
              </Expression>
              <Expression xsi:type="GreaterThan">
                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                  <Value>400</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:DistinctUntilChanged" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Skip">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Subtract" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Buffer">
                  <dsp:Count>100</dsp:Count>
                  <dsp:Skip>1</dsp:Skip>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Average" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:Accumulate" />
              <Expression xsi:type="Mod">
                <Operand xsi:type="IntProperty">
                  <Value>2</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ColorR" />
                  <Property Name="ColorG" />
                  <Property Name="ColorB" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                <ExtentX>0.1</ExtentX>
                <ExtentY>0.1</ExtentY>
                <LocationX>-3.5</LocationX>
                <LocationY>-0.45</LocationY>
                <Layer>1</Layer>
                <Angle>0</Angle>
                <ColorR>1</ColorR>
                <ColorG>1</ColorG>
                <ColorB>1</ColorB>
                <ColorA>1</ColorA>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="2" To="4" Label="Source1" />
              <Edge From="3" To="7" Label="Source2" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="8" To="10" Label="Source2" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="15" To="20" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="17" Label="Source1" />
              <Edge From="17" To="18" Label="Source1" />
              <Edge From="18" To="19" Label="Source1" />
              <Edge From="19" To="20" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MeasureLag</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>BehaviorEvents</Name>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Address</Selector>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="IntProperty">
                        <Value>44</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="harp:Parse">
                <harp:Type>TimestampedS16</harp:Type>
                <harp:IsArray>false</harp:IsArray>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Seconds</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Value</Selector>
              </Expression>
              <Expression xsi:type="GreaterThan">
                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                  <Value>400</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:DistinctUntilChanged" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Skip">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Subtract" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Buffer">
                  <dsp:Count>100</dsp:Count>
                  <dsp:Skip>1</dsp:Skip>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Average" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="BitwiseNot" />
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>it?1:0</scr:Expression>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ColorG" />
                  <Property Name="ColorB" />
                  <Property Name="ColorR" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                <ExtentX>0.1</ExtentX>
                <ExtentY>0.1</ExtentY>
                <LocationX>-3.5</LocationX>
                <LocationY>-0.45</LocationY>
                <Layer>1</Layer>
                <Angle>0</Angle>
                <ColorR>1</ColorR>
                <ColorG>1</ColorG>
                <ColorB>1</ColorB>
                <ColorA>1</ColorA>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="2" To="4" Label="Source1" />
              <Edge From="3" To="7" Label="Source2" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="5" To="15" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="8" To="10" Label="Source2" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="17" Label="Source1" />
              <Edge From="17" To="19" Label="Source2" />
              <Edge From="18" To="19" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Address</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>44</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:Mouse">
          <gli:Index>2</gli:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:MouseDown">
          <gli:Button xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X,Y</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X,Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new (it.Item1.Item1 - it.Item2.Item1 as X, it.Item1.Item2 - it.Item2.Item2 as Y)
</scr:Expression>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ComputerVision</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraSyncInfo</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>393</cv:X>
                  <cv:Y>849</cv:Y>
                  <cv:Width>155</cv:Width>
                  <cv:Height>156</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>198</cv:X>
                  <cv:Y>18</cv:Y>
                  <cv:Width>895</cv:Width>
                  <cv:Height>288</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="17" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="19" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="19" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source3" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="12" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>